PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'stimulus size': '8.5', 'start spatial freq': '0.8', 'step spatial freq': '1', 'end spatial freq': '25.6'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = iva
  keyboardBackend = ioHub
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Routines
  Routine grating_acuity
    GratingComponent GA
      saveStartStop = False
      sf [set every repeat] = spatial_freq
      size = (float(expInfo['stimulus size']), float(expInfo['stimulus size']))
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      tex = sqr
      texture resolution = 512
      units = deg
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    VariableComponent spatial_freq
      startExpValue = float(expInfo['start spatial freq'])
      startRoutineValue = spatial_freq+float(expInfo['step spatial freq'])
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    ApertureComponent aperture
      shape = circle
      size = float(expInfo['stimulus size'])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = deg
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Flow
  LoopInitiator GA_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = (float(expInfo['end spatial freq'])-float(expInfo['start spatial freq']))//float(expInfo['step spatial freq'])
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    Routine grating_acuity
  LoopTerminator GA_loop
